---
API: 2.1
Citation: 'Theeuwes, J. (1992). Perceptual selectivity for color and form. *Perception
  & Psychophysics*, *51*(6), 599–606. <http://doi.org/10.3758/BF03211656>

  '
Description: An attentional capture experiment, loosely based on Theeuwes (1992)
OpenSesame: 3.3.9
Platform: nt
Title: Attentional capture
---
set width 1024
set uniform_coordinates yes
set title "OMM Match to sample"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/covop/OneDrive/Documents/GitHub/OMM"
set disable_garbage_collection yes
set description "A basic match-to-sample task"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sketchpad delay_1
	set duration 500
	set description "Displays stimuli"

define sketchpad delay_1_1
	set duration 1500
	set description "Displays stimuli"

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run new_loop always

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define OMMConditioner new_OMMConditioner
	set sound both
	set serial_port COM5
	set reward no
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define OMMConditioner new_OMMConditioner_1
	set sound "do nothing"
	set serial_port COM5
	set reward yes
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define loop new_loop
	set source_file "SoundList.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 soundID 100
	setcycle 1 soundID 2
	setcycle 2 soundID 3
	run trial_sequence

define repeat_cycle new_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition always

define touch_response new_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "A grid-based response item, convenient for touch screens"
	set correct_response "6;7;10;11"
	set _nrow 4
	set _ncol 4

define sampler sound
	set volume 1
	set stop_after 0
	set sample "nvoc[SoundID].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Lecture d'un fichier audio au format .wav ou .ogg"

define sketchpad start_button
	set duration 0
	set description start_button
	draw image center=1 file="macaque_face.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw image center=1 file="242158236_1053842745383849_6647163616526207690_n.jpg" scale=0.01 show_if=always x=32 y=32 z_index=0
	draw image center=1 file="fruits coupes.jpg" scale=0.40000000000000013 show_if=always x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run start_button always
	run new_touch_response always
	run new_OMMConditioner "[correct] = 1"
	run sound "[correct] = 1"
	run new_OMMConditioner_1 "[correct] = 1"
	run delay_1_1 "[correct] = 1"
	run logger always
	run new_repeat_cycle always

