---
API: 2.1
Citation: 'Theeuwes, J. (1992). Perceptual selectivity for color and form. *Perception
  & Psychophysics*, *51*(6), 599–606. <http://doi.org/10.3758/BF03211656>

  '
Description: An attentional capture experiment, loosely based on Theeuwes (1992)
OpenSesame: 3.3.10
Platform: nt
Title: Attentional capture
---
set width 1024
set uniform_coordinates yes
set title "OMM BackgroundTask"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/pbeli/Documents/GitHub/OMM"
set disable_garbage_collection yes
set description "detection: coo + white screen; touch < 3s reward if not timeout 3s"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sketchpad delay_1
	set duration 500
	set description "Displays stimuli"

define sequence empty_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run get_session_data always
	run request_job always
	run white_screen always
	run playsounds always
	run random_coo always
	run rewardfortouch_2 always
	run screen_touch always
	run trial_sequence always
	run logger always
	run make_task_infinite always

define inline_script get_session_data
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	# Check if the omm object exists, and if so whether it is connected to a
	# server.
	if 'omm' in globals() and omm.connected:
	    session_data = omm.generic_session_data  # retrieve session data from server
	    print('session_data', session_data)
	    # If there is no session data yet, this means that we are starting a new
	    # session. Therefore, we generate a randomly ordered list of all job
	    # indices, and an empty list of all jobs that are already done.
	    if session_data is None:
	        jobs_todo = list(range(1, omm.job_count + 1))
	        random.shuffle(jobs_todo)
	        jobs_done = []
	    # Otherwise unpack the session data, which is a tuple consisting of a list
	    # of job indices that are still to be done, and a list of (job_index, correct)
	    # tuples that indicate which jobs have already been done, and whether the
	    # associated response was correct.
	    else:
	        jobs_todo, jobs_done = session_data
	    var.current_job = jobs_todo[0]
	    print('participant: {} ({})'.format(omm.current_participant_name, omm.current_participant))
	    print('current job:', var.current_job)
	    print('jobs todo:', jobs_todo)
	    print('jobs done:', jobs_done)
	else:
	    print('Not connected to OMM server')
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log accuracy
	log Module
	log time_experiment
	log time_logger
	log time_new_touch_response
	log time_rewarddetection
	log time_rewardfortouch
	log Participant
	log acc
	log title
	log correct_new_touch_response
	log datetime
	log response
	log timestamp
	log response_time
	log time_start_button

define inline_script make_task_infinite
	set description "Executes Python code"
	___run__
	from openmonkeymind import Job
	
	# The job table contains only two entries, and we reset both
	# of them after each trial. This way the task never finishes.
	if omm.connected:
	    omm.set_job_states(1, 101, Job.PENDING)
	__end__
	set _prepare ""

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	set _prepare "print(var.conditioner_port)"

define inline_script new_inline_script_1
	set description "Executes Python code"
	set _run ""
	set _prepare "print(var.conditioner_port)"

define loop new_loop
	set source_file "SoundList.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 soundID 100
	setcycle 1 soundID 2
	setcycle 2 soundID 3
	run trial_sequence

define repeat_cycle new_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition always

define OMMConditioner playsounds
	set sound both
	set serial_port COM4
	set reward no
	set motor_pause 200
	set motor_n_pulses 0
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner Dummy

define sampler random_coo
	set volume 1
	set stop_after 0
	set sample "Random_coo_2.5_[SoundID].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Lecture d'un fichier audio au format .wav ou .ogg"

define OMMRequestJob request_job
	set test_loop test_loop
	set omm_server "127.0.0.1"
	set omm_port 3000
	set omm_api 1
	set jonb_index ""
	set job_index "[current_job]"
	set description "Plugin to request current job for Open Monkey Mind"
	set block_size 8
	set block_select yes
	set _run ""
	set _prepare ""

define OMMConditioner rewardfortouch
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 200
	set motor_n_pulses 1
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner Dummy

define OMMConditioner rewardfortouch_1
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 20
	set motor_n_pulses 1
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner Dummy

define OMMConditioner rewardfortouch_2
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 200
	set motor_n_pulses 1
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner Dummy

define touch_response screen_touch
	set timeout 3000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "A grid-based response item, convenient for touch screens"
	set correct_response 1
	set _nrow 1
	set _ncol 1

define loop test_loop
	set source_file "OMM-Task1_1.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 SoundID 101
	run empty_sequence

define sketchpad timeout_blackscreen3s
	set duration 3000
	set description "Displays stimuli"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run rewardfortouch "[correct] = 1"
	run white_screen_1 "[correct] = 1"
	run timeout_blackscreen3s "[correct] = 0"

define sketchpad white_screen
	set duration 0
	set description start_button
	draw rect color=white fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define sketchpad white_screen_1
	set duration 1000
	set description start_button
	draw rect color=white fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

