---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
Title: Task1_1
---
set width 1024
set uniform_coordinates yes
set title "OMM_Task_1_1-TEST"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/pbeli/Documents/GitHub/OMM"
set disable_garbage_collection yes
set description "detection: coo + white screen; touch < 1s reward if not timeout 3s"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run get_session_data always
	run request_job always
	run trial_sequence always

define inline_script get_session_data
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	if 'omm' in globals() and omm.connected:
	    session_data = omm.generic_session_data  
	    print('session_data', session_data)
	    if session_data is None:
	        jobs_todo = list(range(1, omm.job_count + 1))
	        random.shuffle(jobs_todo)
	        jobs_done = []
	    else:
	        jobs_todo, jobs_done = session_data
	    var.current_job = jobs_todo[0]
	    print('participant: {} ({})'.format(omm.current_participant_name, omm.current_participant))
	    print('current job:', var.current_job)
	    print('jobs todo:', jobs_todo)
	    print('jobs done:', jobs_done)
	else:
	    print('Not connected to OMM server')
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log accuracy
	log Module
	log time_experiment
	log time_logger
	log time_new_touch_response
	log time_rewarddetection
	log time_rewardfortouch
	log Participant
	log acc
	log title
	log correct_new_touch_response
	log datetime
	log response
	log timestamp
	log response_time
	log time_start_button

define OMMConditioner playsounds
	set sound both
	set serial_port COM4
	set reward no
	set motor_pause 200
	set motor_n_pulses 0
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner Dummy

define sampler random_coo
	set volume 1
	set stop_after 0
	set sample "Random_coo_2.5_[SoundID].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Lecture d'un fichier audio au format .wav ou .ogg"

define OMMRequestJob request_job
	set test_loop test_loop
	set omm_server "127.0.0.1"
	set omm_port 3000
	set omm_api 1
	set jonb_index ""
	set job_index "[current_job]"
	set description "Plugin to request current job for Open Monkey Mind"
	set block_size 8
	set block_select yes
	set _run ""
	set _prepare ""

define OMMConditioner rewardfortouch
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 200
	set motor_n_pulses 1
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner Dummy

define touch_response screen_touch
	set timeout 1000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "A grid-based response item, convenient for touch screens"
	set correct_response 1
	set _nrow 1
	set _ncol 1

define sketchpad timeout_blackscreen3s
	set duration 3000
	set description "Displays stimuli"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run white_screen always
	run playsounds always
	run random_coo always
	run screen_touch always
	run rewardfortouch "[correct] = 1"
	run white_screen_1 "[correct] = 1"
	run timeout_blackscreen3s "[correct] = 0"
	run update_session_data always
	run logger always

define inline_script update_session_data
	set description "Executes Python code"
	___run__
	#from openmonkeymind import Job
	
	if 'omm' in globals() and omm.connected:
	    jobs_done.append((var.current_job))
	    jobs_todo=jobs_todo[1:]
	    omm.generic_session_data = jobs_todo,jobs_done  
	__end__
	set _prepare ""

define sketchpad white_screen
	set duration 0
	set description start_button
	draw rect color=white fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define sketchpad white_screen_1
	set duration 1000
	set description start_button
	draw rect color=white fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

