---
API: 2.1
OpenSesame: 3.3.10
Platform: nt
Title: Task1_1
---
set width 1024
set uniform_coordinates yes
set title OMM_Task_1_1
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/pbeli/Documents/GitHub/OMM"
set disable_garbage_collection yes
set description "detection: coo + white screen; touch < 500ms reward if not timeout 3s"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define inline_script description
	set description "Executes Python code"
	set _run ""
	___prepare__
	"""
	First stage of the Go-NoGo task: Task1_1
	
	On detection a coo is played and a white screen is displayed: the monkey has to touch the screen within a 500-3000ms window to get a reward
	
	Same as background task but with response time decreasing in setps of 500ms from 3000 to 500ms
	
	=> 6 phases with phase1=background Task and phase6=500ms response window.
	
	Criterion is 80% correct on the last block of trials (50)
	"""
	__end__

define inline_script evaluate
	set description "Executes Python code"
	___run__
	#update correct_touch
	var.correct_touch = 1
	print('Correct touch!')
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run description always
	run global_variables always
	run get_session_data always
	run test_loop always
	run request_job always
	run trial_sequence always

define inline_script experimental_variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.timeout=3500-(500*var.training_level)
	print('timeout:{}'.format(var.timeout))
	# Response variables
	var.correct_touch = 0
	__end__

define inline_script get_session_data
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	if 'omm' in globals() and omm.connected:
	    session_data = omm.generic_session_data  
	    print('session_data', session_data)
	    if session_data is None:
	        var.training_level = 1
	        jobs_todo = list(range(1, block_size + 1))
	        random.shuffle(jobs_todo)
	        jobs_done = []
	    else:
	        var.training_level, jobs_todo,jobs_done = session_data
	    var.current_job = jobs_todo[0]
	    var.participant_name=omm.current_participant_name
	    # print('participant: {} ({})'.format(omm.current_participant_name, omm.current_participant))
	    # print('current job:', var.current_job)
	    # print('jobs todo:', jobs_todo)
	    # print('jobs done:', jobs_done)
	else:
	    print('Not connected to OMM server')
	__end__

define inline_script global_variables
	set description "Exécute du code Python"
	set _run ""
	___prepare__
	# Block size
	block_size = 4
	#block_size = 2 # for testing
	var.training_level=1
	var.participant_name="testing"
	var.success_criterion=0.8
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log accuracy
	log Module
	log time_experiment
	log time_logger
	log time_new_touch_response
	log time_rewarddetection
	log time_rewardfortouch
	log Participant
	log acc
	log title
	log correct_new_touch_response
	log datetime
	log response
	log timestamp
	log response_time
	log time_start_button
	log training_level
	log timeout

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define OMMConditioner playsounds
	set sound both
	set serial_port COM4
	set reward no
	set motor_pause 200
	set motor_n_pulses 0
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner Dummy

define sampler random_coo
	set volume 1
	set stop_after 0
	set sample "Random_coo_2.5_[SoundID].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Lecture d'un fichier audio au format .wav ou .ogg"

define OMMRequestJob request_job
	set test_loop test_loop
	set omm_server "127.0.0.1"
	set omm_port 3000
	set omm_api 1
	set jonb_index ""
	set job_index "[current_job]"
	set description "Plugin to request current job for Open Monkey Mind"
	set block_size 8
	set block_select yes
	set _run ""
	set _prepare ""

define OMMConditioner rewardfortouch
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 200
	set motor_n_pulses 1
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner Dummy

define touch_response screen_touch
	set timeout "[timeout]"
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "A grid-based response item, convenient for touch screens"
	set correct_response 1
	set _nrow 1
	set _ncol 1

define loop test_loop
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 SoundID 101
	setcycle 1 SoundID 102
	setcycle 2 SoundID 103
	run new_sequence

define sketchpad timeout_blackscreen3s
	set duration 3000
	set description "Displays stimuli"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experimental_variables always
	run white_screen always
	run playsounds always
	run random_coo always
	run screen_touch always
	run rewardfortouch "[correct] = 1"
	run evaluate "[correct] = 1"
	run white_screen_1 "[correct] = 1"
	run timeout_blackscreen3s "[correct] = 0"
	run update_session_data always
	run logger always

define inline_script update_session_data
	set description "Executes Python code"
	___run__
	from openmonkeymind import Job
	import statistics
	
	if 'omm' in globals() and omm.connected:
	    jobs_done.append((var.current_job, var.correct_touch))
	    jobs_todo=jobs_todo[1:]
	    
	    if len(jobs_done) == block_size:
	        acc = statistics.mean(job_correct for job_index, job_correct in jobs_done)
	        if acc < var.success_criteria:
	            omm.set_job_states(1, omm.job_count + 1, Job.PENDING) 
	            jobs_todo += [job_index for job_index, job_correct in jobs_done]
	            jobs_done = []
	        elif var.training_level<7:
	            var.training_level=var.training_level+1
	            print('progress to training level:',var.training_level)
	            jobs_todo=list(range(1+(var.training_level-1)*block_size ,1+var.training_level*block_size))
	            # print('jobs todo:', jobs_todo)
	            random.shuffle(jobs_todo)
	            jobs_done = []
	        else:
	            print('Level 6 completed!!!!')
	            omm.set_job_states(1,omm.job_count+1,Job.FINISHED)
	        
	    omm.generic_session_data = var.training_level, jobs_todo,jobs_done  
	__end__
	set _prepare ""

define sketchpad white_screen
	set duration 0
	set description start_button
	draw rect color=white fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define sketchpad white_screen_1
	set duration 1000
	set description start_button
	draw rect color=white fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

