---
API: 2.1
Citation: 'Theeuwes, J. (1992). Perceptual selectivity for color and form. *Perception
  & Psychophysics*, *51*(6), 599–606. <http://doi.org/10.3758/BF03211656>

  '
Description: An attentional capture experiment, loosely based on Theeuwes (1992)
OpenSesame: 3.3.10
Platform: nt
Title: Attentional capture
---
set width 1024
set uniform_coordinates yes
set title "OMMTask1_v2-TESTING"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/pbeli/Documents/GitHub/OMM"
set disable_garbage_collection yes
set description "increasingduration of CooA sequence before CooB, decreasing response window"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sampler CooB
	set volume 1
	set stop_after 0
	set sample "[CooB]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Lecture d'un fichier audio au format .wav ou .ogg"

define sampler SequenceCooA
	set volume 1
	set stop_after "[duration]"
	set sample "[CooA]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define inline_script aborted_trial
	set description "Executes Python code"
	___run__
	var.aborted_trial=1
	print ('>>> ABORTED TRIAL')
	__end__
	set _prepare ""

define sketchpad aborted_trial_2
	set duration 2000
	set description "green screen"
	draw rect color="#00ff00" fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define OMMConditioner activate_HPs
	set sound both
	set serial_port COM4
	set reward no
	set motor_pause 20
	set motor_n_pulses 0
	set fallback_conditioner Dummy
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define inline_script correct_touch
	set description "Executes Python code"
	___run__
	var.trial_correct=1
	print('>>> CORRECT TRIAL')
	__end__
	set _prepare ""

define touch_response delay
	set timeout "[duration]"
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "A grid-based response item, convenient for touch screens"
	set correct_response 1
	set _nrow 1
	set _ncol 1

define inline_script description
	set description "Executes Python code"
	set _run ""
	___prepare__
	"""
	Task 1 - testing
	
	A sequence of 7 repetitions of CooA is played for a given duration before CooB
	
	At level 0 only CooB is played, with a 3s response window
	
	At levels 1-10, the sequence of CooA is played for increasing durations, between 50ms (level 1) to 500ms (level 10): one entire CooA
	
	From level 11 to 16, we only play entire CooAs, with numbers randomly chosen between an increasing window
	level 11: 1-2 CooAs
	level 12: 1-3 CooAs
	..
	level 16: 1-7 CooAs
	
	and in parallel the response window from onset of CooB is reduced from 3000ms (level 0) to 500ms
	"""
	__end__

define inline_script early_response
	set description "Executes Python code"
	___run__
	print ('>>> Early response')
	var.early_response = 1 
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run description always
	run global_variables always
	run get_session_data always
	run test_loop never
	run request_job always
	run trial_sequence always

define inline_script experimental_variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	var.success_criterion=0.5 
	
	print('>>> LEVEL ', var.level)
	
	var.aborted_trial = 0 # 1 if trial aborted
	var.trial_correct = 0 # 1 if screen touched during response window
	var.early_response = 0 # 1 if early response
	
	# duration sequence COoA is played
	if var.level<11:
	    var.duration=var.level*50 #estimated 30ms server-client delay
	else:
	    var.duration=(random.randrange(var.level-8)+1)*500-35  #estimated 35ms server-client delay
	    
	print('>>> Duration Sequence CooA ',var.duration)
	
	#response Window
	var.response_window=3000-160*var.level # 2850-440ms
	print('>>> RESPONSE WINDOW ', var.response_window)
	__end__

define inline_script get_session_data
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	if 'omm' in globals() and omm.connected:
	    session_data = omm.generic_session_data  
	    print('session_data', session_data)
	    if session_data is None:
	        var.level=1 
	        jobs_todo=list(range(1 ,1+block_size))
	        random.shuffle(jobs_todo)
	        jobs_done = []
	        
	    else:
	        var.level, jobs_todo, jobs_done = session_data
	    var.current_job = jobs_todo[0]
	    print('participant: {} ({})'.format(omm.current_participant_name, omm.current_participant))
	    
	    print('current job:', var.current_job)
	    print('jobs todo:', jobs_todo)
	    print('jobs done:', jobs_done)
	    print('current training level:',var.level)
	else:
	    print('Not connected to OMM server')
	    
	var.participant_name=format(omm.current_participant_name)
	__end__

define inline_script global_variables
	set description "Exécute du code Python"
	set _run ""
	___prepare__
	# Block size
	# block_size = 20
	block_size = 2 # for testing
	
	# Response window from Coo onset
	var.max_response_window = 3000 
	
	# Default participant name and level
	var.participant_name="testing"
	var.level=1
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log Module
	log time_rewardfortouch
	log title
	log response
	log timestamp
	log response_time
	log level
	log aborted_trial
	log trial_correct
	log early_response

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define inline_script reaching_criteria_loop
	set description "Executes Python code"
	___run__
	from openmonkeymind import Job
	import statistics
	
	if 'omm' in globals() and omm.connected:
	    
	    # Print properties of current Job
	    print('job id: {}'.format(var.omm_job_id))
	    print('current job index: {}'.format(var.omm_job_index))
	    print('correct = {}'.format(var.trial_correct))
	    
	    #  current job is now done, add whether the response was correct
	    jobs_done.append((var.current_job,var.trial_correct))
	    jobs_todo=jobs_todo[1:]
	    
	    print('current level:', var.level)
	    print('current job:', var.current_job)
	    print('jobs todo:', jobs_todo)
	    print('jobs done:', jobs_done)
	    
	    # If all trials of the block are done, check accuracy 
	    if len(jobs_done) == block_size:
	        print('>>> BLOCK FINISHED')
	        acc = statistics.mean(job_correct for job_index, job_correct in jobs_done)
	        print('>>> ACCURACY: {}'.format(acc))
	        
	        # If the accuracy was too low, we re-add all done jobs to the todo list and clear the list of done jobs. We also reset all the Job states to pending, otherwise the announce will crash with 'No jobs available'.
	        
	        if acc < var.success_criterion:
	            print('>>> BLOCK TO REDO')
	            # just setting all jobs back to pending...
	            omm.set_job_states(1, omm.job_count + 1, Job.PENDING) 
	            jobs_todo += [job_index for job_index, job_correct in jobs_done]
	            jobs_done = []
	            
	        # if criterion reached
	        elif var.level<16:
	            var.level=var.level+1
	            print('>>>>>>>>>>>>>>>>>>>>>>')
	            print('>>> Moving to level ',var.level)
	            #jobs_todo=list(range(1, 26)) # 25 different jobs
	            omm.set_job_states(1, omm.job_count + 1, Job.PENDING)
	            jobs_todo=list(range(1+(var.level-1)*block_size ,1+var.level*block_size)) 
	            #different stim for each level
	            print('jobs to do:', jobs_todo)
	            random.shuffle(jobs_todo)
	            jobs_done = []
	            
	        else: 
	            print('>>> LEVEL 16 COMPLETED !!!!')
	            print('>>> Continuing at level 16')
	            omm.set_job_states(1,omm.job_count+1,Job.PENDING)
	            jobs_todo += [job_index for job_index, job_correct in jobs_done]
	            jobs_done = []
	            
	    # update the generic session data on the server
	    omm.generic_session_data = var.level,jobs_todo,jobs_done  
	    print(omm.generic_session_data)
	__end__
	set _prepare ""

define OMMRequestJob request_job
	set test_loop test_loop
	set overwrite no
	set omm_server "127.0.0.1"
	set omm_port 3000
	set omm_api 1
	set jonb_index ""
	set job_index "[current_job]"
	set description "Plugin to request current job for Open Monkey Mind"
	set block_size 8
	set block_select yes
	set _run ""
	set _prepare ""

define inline_script reset_correct
	set description "Executes Python code"
	set _run "var.correct=0 #reset variable from first touch"
	set _prepare ""

define sketchpad reward_screen
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[participant_name]" x=-256 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Level: [level]" x=224 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Duration: [duration]" x=64 y=-288 z_index=0

define OMMConditioner rewardfortouch
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 500
	set motor_n_pulses 1
	set fallback_conditioner Dummy
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define touch_response screen_touch
	set timeout "[response_window]"
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "A grid-based response item, convenient for touch screens"
	set correct_response 1
	set _nrow 1
	set _ncol 1

define loop test_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 CooA "Sequence 7 CooA.wav"
	setcycle 0 CooB "CooB.wav"
	run new_sequence

define sketchpad timeout
	set duration 2000
	set description "Displays stimuli"
	draw rect color="#00ff00" fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define sequence trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run CooB always
	run screen_touch always
	run correct_touch "[correct] = 1"
	run aborted_trial "[correct] = 0"
	run rewardfortouch "[correct] = 1"
	run reward_screen "[correct] = 1"
	run aborted_trial_2 "[correct] = 0"
	run reset_correct always

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experimental_variables always
	run activate_HPs always
	run SequenceCooA always
	run delay always
	run early_response "[correct] = 1"
	run timeout "[correct] = 1"
	run trial "[correct] = 0"
	run logger always
	run reaching_criteria_loop always

