---
API: 2.1
OpenSesame: 3.3.12
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\pbeli\\Documents\\GitHub\\OMM"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define sampler Coo_or_Scream
	set volume 1
	set stop_after 0
	set sample "[Sound]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define inline_script Response_buttons
	set description "Executes Python code"
	___run__
	
	my_canvas = Canvas()
	
	# Variables in jobs
	#     Stim:     1=Coo; 2=Scream
	#     Position: 1 = Blue Circle on Right; -1 Blue Circle on on Left
	#     CR : is correct repone on left (1) or right (2)
	
	# Correct response for touch (1=left; 2=Right) :  ([Stim]*[Position]/2)+1.5)
	
	if var.Stim == 1: # Coo - BC Correct button - brightness max
	    my_canvas.circle(256*var.Position, 0, 128, fill=True, color=(0,0,255)) 
	    my_canvas.rect(-256*var.Position-100, -100, 200,200, fill=True, color=(51*var.level,0,0))
	                   
	else:             # Scream - RS correct nutton - brightness max
	    my_canvas.circle(256*var.Position, 0, 128, fill=True, color=(0,0,51*var.level)) 
	    my_canvas.rect(-256*var.Position-100, -100, 200,200, fill=True, color=(255,0,0))
	    
	my_canvas.show()
	__end__
	set _prepare ""

define OMMConditioner activate_HPs
	set sound both
	set serial_port COM4
	set reward no
	set motor_pause 20
	set motor_n_pulses 0
	set fallback_conditioner Dummy
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define inline_script analyze
	set description "Executes Python code"
	___run__
	
	if var.correct == 1:
	    var.trial_correct=1
	elif var.response_time==2000 :
	    var.aborted_trial=1
	    
	print("Trial correct: ",var.trial_correct, "  ", var.response_time)
	print("Aborted trial: ", var.aborted_trial)
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run general_variables always
	run new_loop_2 always

define inline_script general_variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.level=1
	print('>>> LEVEL ', var.level)
	
	var.success_criterion=0.8
	__end__

define loop new_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Sound "Coo.wav"
	setcycle 0 Stim 1
	setcycle 0 Position 1
	setcycle 0 CR 2
	setcycle 1 Sound "Coo.wav"
	setcycle 1 Stim 1
	setcycle 1 Position -1
	setcycle 1 CR 1
	setcycle 2 Sound "Scream.wav"
	setcycle 2 Stim -1
	setcycle 2 Position 1
	setcycle 2 CR 1
	setcycle 3 Sound "Scream.wav"
	setcycle 3 Stim -1
	setcycle 3 Position -1
	setcycle 3 CR 2
	run trial

define inline_script reste_variables
	set description "Executes Python code"
	___run__
	var.aborted_trial = 0 # 1 if no response within 2s
	var.trial_correct = 0 # 1 if correct symbol touched within 2s
	__end__
	set _prepare ""

define OMMConditioner reward
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 500
	set motor_n_pulses 1
	set fallback_conditioner Dummy
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define sketchpad reward_screen
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Level: [level]" x=224 y=-352 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="TASK 2" x=-480 y=-352 z_index=0

define sketchpad timeout_screen
	set duration 2000
	set description "Displays stimuli"
	draw rect color="#00ff00" fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define sequence trial
	set flush_keyboard no
	set description "Runs a number of items in sequence"
	run reste_variables always
	run activate_HPs always
	run Response_buttons always
	run Coo_or_Scream always
	run wait_reposne always
	run analyze always
	run reward_screen "[trial_correct]=1"
	run timeout_screen "[correct]=0"
	run reward "[trial_correct]=1"

define touch_response wait_reposne
	set timeout 2000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "A grid-based response item, convenient for touch screens"
	set correct_response "[CR]"
	set _nrow 1
	set _ncol 2

