---
API: 2.1
Citation: 'Theeuwes, J. (1992). Perceptual selectivity for color and form. *Perception
  & Psychophysics*, *51*(6), 599–606. <http://doi.org/10.3758/BF03211656>

  '
Description: An attentional capture experiment, loosely based on Theeuwes (1992)
OpenSesame: 3.3.12
Platform: nt
Title: Attentional capture
---
set width 1024
set uniform_coordinates yes
set title OMMTask2v2
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\pbeli\\Documents\\GitHub\\OMM"
set disable_garbage_collection yes
set description "associte a Coo and a Scream to two visual symbols"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sampler Coo1_or_Coo2
	set volume 1
	set stop_after 0
	set sample "[Sound]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define inline_script Display_response_buttons
	set description Disply_response_buttons
	___run__
	my_canvas = Canvas()
	
	if var.level<7:
	    if var.Stim == 1: # Coo_01 - left face
	        path = exp.pool[u'macaque_face_1.png']
	        my_canvas.image(path, x=-256, scale=0.75)
	                   
	    else:             # Coo_03 - right face
	        path = exp.pool[u'macaque_face_2.png']
	        my_canvas.image(path, x=256, scale=0.75)
	        
	else: #level 7
	    path = exp.pool[u'macaque_face_1.png']
	    my_canvas.image(path, x=-256, scale=0.75)
	    path = exp.pool[u'macaque_face_2.png']
	    my_canvas.image(path, x=256, scale=0.75)
	    
	my_canvas.show()
	__end__
	set _prepare ""

define OMMConditioner activate_HPs
	set sound both
	set serial_port COM4
	set reward no
	set motor_pause 20
	set motor_n_pulses 0
	set fallback_conditioner Dummy
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define inline_script analyze
	set description "Executes Python code"
	___run__
	
	if var.correct == 1:
	    var.trial_correct=1
	elif var.response_time>=2000 :
	    var.aborted_trial=1
	    
	print("Trial correct: ",var.trial_correct, "  ", var.response_time)
	print("Aborted trial: ", var.aborted_trial)
	__end__
	set _prepare ""

define advanced_delay delay_500ms
	set jitter_mode Uniform
	set jitter 0
	set duration 500
	set description "Waits for a specified duration"

define inline_script description
	set description "Executes Python code"
	set _run ""
	___prepare__
	"""
	OMM Task 2 version 3
	31 octobre 2022
	
	Two faces are displayed on each side of the screen 
	and either Coo1 or Coo2 is played
	
	
	The level conditions the brightness of the incorrect button: 0% at level 1 up to 100% at level 6 in steps of 20%
	The monkey must learn to press on the left face for Coo_01, and on the right face for Coo_03 within 2s of sound onset
	
	Levels 1-6
	A single face is displayed, and the associated coo is played, always the same pair in a block
	At each new level (block), switch to the other face/coo (to setup in jobs table)
	
	Level 7: 
	The two faces are displayed, order of coo is random
	
	"""
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run description always
	run global_variables always
	run get_session_data always
	run test_loop never
	run request_job always
	run trial_sequence always

define inline_script get_session_data
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	if 'omm' in globals() and omm.connected:
	    session_data = omm.generic_session_data  
	    print('session_data', session_data)
	    if session_data is None:
	        var.level=1 
	        jobs_todo=list(range(1 ,1+var.block_size))
	        random.shuffle(jobs_todo)
	        jobs_done = []
	        
	    else:
	        var.level, jobs_todo, jobs_done = session_data
	    var.current_job = jobs_todo[0]
	    print('participant: {} ({})'.format(omm.current_participant_name, omm.current_participant))
	    
	    print('current job:', var.current_job)
	    print('jobs todo:', jobs_todo)
	    print('jobs done:', jobs_done)
	    print('current training level:',var.level)
	else:
	    print('Not connected to OMM server')
	    
	var.participant_name=format(omm.current_participant_name)
	__end__

define inline_script global_variables
	set description "Exécute du code Python"
	set _run ""
	___prepare__
	var.block_size = 50
	var.participant_name="testing"
	var.success_criterion=0.8
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log Module
	log time_rewardfortouch
	log title
	log response
	log timestamp
	log response_time
	log level
	log aborted_trial
	log trial_correct
	log early_response
	log participant_name

define sampler new_sampler
	set volume 1
	set stop_after 0
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define inline_script reaching_criteria_loop
	set description "Executes Python code"
	___run__
	from openmonkeymind import Job
	import statistics
	
	if 'omm' in globals() and omm.connected:
	    
	    # Print properties of current Job
	    print('job id: {}'.format(var.omm_job_id))
	    print('current job index: {}'.format(var.omm_job_index))
	    print('correct = {}'.format(var.trial_correct))
	    
	    #  current job is now done, add whether the response was correct
	    jobs_done.append((var.current_job,var.trial_correct))
	    jobs_todo=jobs_todo[1:]
	    
	    print('current level:', var.level)
	    print('current job:', var.current_job)
	    print('jobs todo:', jobs_todo)
	    print('jobs done:', jobs_done)
	    
	    # If all trials of the block are done, check accuracy 
	    if len(jobs_done) == var.block_size:
	        print('>>> BLOCK FINISHED')
	        acc = statistics.mean(job_correct for job_index, job_correct in jobs_done)
	        print('>>> ACCURACY: {}'.format(acc))
	        
	        # If the accuracy was too low, we re-add all done jobs to the todo list and clear the list of done jobs. We also reset all the Job states to pending, otherwise the announce will crash with 'No jobs available'.
	        
	        if acc < var.success_criterion:
	            print('>>> BLOCK TO REDO')
	            # just setting all jobs back to pending...
	            omm.set_job_states(1, omm.job_count + 1, Job.PENDING) 
	            jobs_todo += [job_index for job_index, job_correct in jobs_done]
	            jobs_done = []
	            
	        # if criterion reached
	        elif var.level<7:
	            var.level=var.level+1
	            print('>>>>>>>>>>>>>>>>>>>>>>')
	            print('>>> Moving to level ',var.level)
	            #jobs_todo=list(range(1, 26)) # 25 different jobs
	            omm.set_job_states(1, omm.job_count + 1, Job.PENDING)
	            jobs_todo=list(range(1+(var.level-1)*var.block_size ,1+var.level*var.block_size)) 
	            #different stim for each level
	            print('jobs to do:', jobs_todo)
	            random.shuffle(jobs_todo)
	            jobs_done = []
	            
	        else: 
	            print('>>> LEVEL 7 COMPLETED !!!!')
	            print('>>> Continuing at level 7')
	            omm.set_job_states(1,omm.job_count+1,Job.PENDING)
	            jobs_todo += [job_index for job_index, job_correct in jobs_done]
	            jobs_done = []
	            
	    # update the generic session data on the server
	    omm.generic_session_data = var.level,jobs_todo,jobs_done  
	    print(omm.generic_session_data)
	__end__
	set _prepare ""

define inline_script redo_aborted_trial
	set description "Executes Python code"
	___run__
	# if trial aborted reset to pending to do it again
	from openmonkeymind import Job
	
	if 'omm' in globals() and omm.connected:
	    
	    # Print properties of current Job
	    # print('job id: {}'.format(var.omm_job_id))
	    # print('current job index: {}'.format(var.omm_job_index))
	    # print('Aborted? {}'.format(var.aborted_trial))
	    # print('crurrent training stage:', training_stage)
	    # print('current job:', var.current_job)
	    # print('jobs todo:', jobs_todo)
	    # print('jobs done:', jobs_done)
	    
	    # Set all jobs back to Pending without changing job list
	    print('REDOING ABORTED TRIAL')
	    omm.set_job_states(1, omm.job_count + 1, Job.PENDING)
	  
	__end__
	set _prepare ""

define OMMRequestJob request_job
	set test_loop test_loop
	set overwrite no
	set omm_server "127.0.0.1"
	set omm_port 3000
	set omm_api 1
	set jonb_index ""
	set job_index "[current_job]"
	set description "Plugin to request current job for Open Monkey Mind"
	set block_size 8
	set block_select yes
	set _run ""
	set _prepare ""

define inline_script reset_experimental_variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.aborted_trial = 0 # 1 if no response within 2s
	var.trial_correct = 0 # 1 if correct symbol touched within 2s
	__end__

define OMMConditioner reward
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 500
	set motor_n_pulses 1
	set fallback_conditioner Dummy
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define sketchpad reward_screen
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Level: [level]" x=224 y=-352 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="TASK 2v2" x=-480 y=-352 z_index=0

define loop test_loop
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Sound "Coo_01.wav"
	setcycle 0 Stim 1
	setcycle 0 Position 1
	setcycle 0 CR 2
	setcycle 1 Sound "Coo_03.wav"
	setcycle 1 Stim 1
	setcycle 1 Position -1
	setcycle 1 CR 1
	run new_sequence

define sketchpad timeout_screen
	set duration 2000
	set description "Displays stimuli"
	draw rect color="#00ff00" fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_experimental_variables always
	run Display_response_buttons always
	run activate_HPs always
	run Coo1_or_Coo2 always
	run wait_response always
	run analyze always
	run reward "[trial_correct] = 1"
	run timeout_screen "[trial_correct] = 0"
	run reward_screen "[trial_correct] = 1"
	run logger always
	run reaching_criteria_loop "[aborted_trial]=0"
	run redo_aborted_trial "[aborted_trial]=1"

define touch_response wait_response
	set timeout 2000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "A grid-based response item, convenient for touch screens"
	set correct_response "[Stim]"
	set _nrow 1
	set _ncol 2

