---
API: 2.1
Citation: 'Theeuwes, J. (1992). Perceptual selectivity for color and form. *Perception
  & Psychophysics*, *51*(6), 599–606. <http://doi.org/10.3758/BF03211656>

  '
Description: An attentional capture experiment, loosely based on Theeuwes (1992)
OpenSesame: 3.3.12
Platform: nt
Title: Attentional capture
---
set width 1024
set uniform_coordinates yes
set title OMMTask4
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\pbeli\\Documents\\GitHub\\OMM"
set disable_garbage_collection yes
set description "one target, one distractor, only taregt rewarded"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sequence Playing_Sound1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Sound1 always
	run delay_1 always
	run wrong_response "[correct]=1 and [Position_Target]=2"
	run timeout_1 "[correct]=1 and [Position_Target]=2"
	run rewardfortouch_1 "[correct]=1 and [Position_Target]=1"
	run reward_screen "[correct]=1 and [Position_Target]=1"
	run correct_response_1 "[correct]=1 and [Position_Target]=1"
	run reset_correct always

define sequence Playing_Sound2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Sound2 "[response_to_first]=0"
	run delay_2 "[response_to_first]=0"
	run wrong_response_1 "[response_to_first]=0 and [correct]=1 and [Position_Target]=1"
	run timeout_1_1 "[response_to_first]=0 and [correct]=1 and [Position_Target]=1"
	run correct_response_1_1 "[response_to_first]=0 and [correct]=1 and [Position_Target]=2"
	run rewardfortouch "[response_to_first]=0 and [correct]=1 and [Position_Target]=2"
	run reward_screen_1 "[response_to_first]=0 and [correct]=1 and [Position_Target]=2"
	run aborted_trial "[response_to_first]=0 and [correct]=0"
	run aborted_trial_2 "[response_to_first]=0 and [correct]=0"

define sampler Sound1
	set volume 1
	set stop_after 0
	set sample "[Sound1]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sampler Sound2
	set volume 1
	set stop_after 0
	set sample "[Sound2]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Lecture d'un fichier audio au format .wav ou .ogg"

define inline_script aborted_trial
	set description "Executes Python code"
	___run__
	var.aborted_trial=1
	print('')
	print('>>>>>>>>>>>>>>>>>>>>>>')
	print ('>>> ABORTED TRIAL')
	print('>>>>>>>>>>>>>>>>>>>>>>')
	print('')
	__end__
	set _prepare ""

define sketchpad aborted_trial_2
	set duration 2000
	set description "green screen"
	draw rect color="#00ff00" fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define OMMConditioner activate_HPs
	set sound both
	set serial_port COM4
	set reward no
	set motor_pause 20
	set motor_n_pulses 0
	set fallback_conditioner Dummy
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define inline_script correct_response_1
	set description "Executes Python code"
	___run__
	print('')
	print('>>>>>>>>>>>>>>>>>>>>>>')
	print ('>>> CORRECT RESPONSE !!!')
	print('>>>>>>>>>>>>>>>>>>>>>>')
	print('')
	var.response_to_first = 1
	var.trial_correct = 1
	__end__
	set _prepare ""

define inline_script correct_response_1_1
	set description "Executes Python code"
	___run__
	print('')
	print('>>>>>>>>>>>>>>>>>>>>>>')
	print ('>>> CORRECT RESPONSE !!!')
	print('>>>>>>>>>>>>>>>>>>>>>>')
	print('')
	var.trial_correct = 1
	__end__
	set _prepare ""

define touch_response delay_1
	set timeout "[response_window]"
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "A grid-based response item, convenient for touch screens"
	set correct_response 1
	set _nrow 1
	set _ncol 1

define touch_response delay_2
	set timeout "[response_window]"
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "A grid-based response item, convenient for touch screens"
	set correct_response 1
	set _nrow 1
	set _ncol 1

define inline_script description
	set description "Executes Python code"
	set _run ""
	___prepare__
	"""
	OMM Task 4
	
	At each trial Target and Distractor are played in succession in random order
	Seul press within 1s of Target onset is rewarded
	
	Level 1: -20dB
	Level 5: 0dB - distractors same amplitude as target
	
	Le calcul de la performance à la fin d'un block ne tient pas compte des aborted trials
	"""
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run description always
	run global_variables always
	run get_session_data always
	run test_loop never
	run request_job always
	run experimental_variables always
	run trial_sequence always

define inline_script experimental_variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	
	var.success_criterion=0.8
	
	print('>>> LEVEL ', var.level)
	
	var.aborted_trial = 0 # 1 if trial aborted, not couned in performance
	var.trial_correct = 0 # 1 if screen touched during target windiw
	var.response_to_first= 0 # 1 if response to Sound 1
	var.response_window=1000 #response Window
	__end__

define inline_script get_session_data
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	if 'omm' in globals() and omm.connected:
	    session_data = omm.generic_session_data  
	    print('session_data', session_data)
	    if session_data is None:
	        var.level=1 
	        jobs_todo=list(range(1 ,1+block_size))
	        random.shuffle(jobs_todo)
	        jobs_done = []
	        
	    else:
	        var.level, jobs_todo, jobs_done = session_data
	    var.current_job = jobs_todo[0]
	    print('participant: {} ({})'.format(omm.current_participant_name, omm.current_participant))
	    
	    print('current job:', var.current_job)
	    print('jobs todo:', jobs_todo)
	    print('jobs done:', jobs_done)
	    print('current training level:',var.level)
	else:
	    print('Not connected to OMM server')
	    
	var.participant_name=format(omm.current_participant_name)
	__end__

define inline_script global_variables
	set description "Exécute du code Python"
	set _run ""
	___prepare__
	block_size = 20
	#block_size = 4 # testing
	
	# Default participant name and level
	var.participant_name="testing"
	var.level=1
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log Module
	log time_rewardfortouch
	log title
	log timestamp
	log level
	log aborted_trial
	log trial_correct
	log Sound1
	log Sound2
	log Position_Target
	log participant_name
	log response_time_delay_1
	log response_time_delay_2
	log response_to_first

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define inline_script reaching_criteria_loop
	set description "Executes Python code"
	___run__
	from openmonkeymind import Job
	import statistics
	
	if 'omm' in globals() and omm.connected:
	    
	    # Print properties of current Job
	    print('job id: {}'.format(var.omm_job_id))
	    print('current job index: {}'.format(var.omm_job_index))
	    print('correct = {}'.format(var.trial_correct))
	    
	    #  current job is now done, add whether the response was correct
	    jobs_done.append((var.current_job,var.trial_correct))
	    jobs_todo=jobs_todo[1:]
	    
	    print('current level:', var.level)
	    print('current job:', var.current_job)
	    print('jobs todo:', jobs_todo)
	    print('jobs done:', jobs_done)
	    
	    # If all trials of the block are done, check accuracy 
	    if len(jobs_done) == block_size:
	
	        print('')
	        print('>>>>>>>>>>>>>>>>>>>>>>')
	        print('>>> BLOCK FINISHED')
	        print('>>>>>>>>>>>>>>>>>>>>>>')
	        print('')
	
	        acc = statistics.mean(job_correct for job_index, job_correct in jobs_done)
	        print('>>> ACCURACY: {}'.format(acc))
	        
	        # If the accuracy was too low, we re-add all done jobs to the todo list and clear the list of done jobs. We also reset all the Job states to pending, otherwise the announce will crash with 'No jobs available'.
	        
	        if acc < var.success_criterion:
	 
	            print('')
	            print('>>>>>>>>>>>>>>>>>>>>>>')
	            print('>>> BLOCK TO REDO')
	            print('>>>>>>>>>>>>>>>>>>>>>>')
	            print('')
	
	            
	            # just setting all jobs back to pending...
	            omm.set_job_states(1, omm.job_count + 1, Job.PENDING) 
	            jobs_todo += [job_index for job_index, job_correct in jobs_done]
	            jobs_done = []
	            
	        # if criterion reached
	        elif var.level<5:
	            var.level=var.level+1
	            print('')
	            print('>>>>>>>>>>>>>>>>>>>>>>')
	            print('>>> MOVING TO LEVEL ',var.level)
	            print('>>>>>>>>>>>>>>>>>>>>>>')
	            print('')
	
	            
	            #jobs_todo=list(range(1, 26)) # 25 different jobs
	            omm.set_job_states(1, omm.job_count + 1, Job.PENDING)
	            jobs_todo=list(range(1+(var.level-1)*block_size ,1+var.level*block_size)) 
	            #different stim for each level
	            print('jobs to do:', jobs_todo)
	            random.shuffle(jobs_todo)
	            jobs_done = []
	            
	        else: 
	            print('')
	            print('>>>>>>>>>>>>>>>>>>>>>>')
	            print('>>> LEVEL 5 COMPLETED !!!!')
	            print('>>> Continuing at level 5')
	            print('>>>>>>>>>>>>>>>>>>>>>>')
	            print('')
	
	            
	            omm.set_job_states(1,omm.job_count+1,Job.PENDING)
	            jobs_todo += [job_index for job_index, job_correct in jobs_done]
	            jobs_done = []
	            
	    # update the generic session data on the server
	    omm.generic_session_data = var.level,jobs_todo,jobs_done  
	    print(omm.generic_session_data)
	__end__
	set _prepare ""

define inline_script redo_aborted_trial
	set description "Executes Python code"
	___run__
	# if trial aborted reset to pending to do it again
	from openmonkeymind import Job
	
	if 'omm' in globals() and omm.connected:
	    
	    # Print properties of current Job
	    # print('job id: {}'.format(var.omm_job_id))
	    # print('current job index: {}'.format(var.omm_job_index))
	    # print('Aborted? {}'.format(var.aborted_trial))
	    # print('crurrent training stage:', training_stage)
	    # print('current job:', var.current_job)
	    # print('jobs todo:', jobs_todo)
	    # print('jobs done:', jobs_done)
	    
	    # Set all jobs back to Pending without changing job list
	
	    print('')
	    print('>>>>>>>>>>>>>>>>>>>>>>')
	    print('REDOING ABORTED TRIAL')
	    print('>>>>>>>>>>>>>>>>>>>>>>')
	    print('')
	
	    omm.set_job_states(1, omm.job_count + 1, Job.PENDING)
	  
	__end__
	set _prepare ""

define OMMRequestJob request_job
	set test_loop test_loop
	set overwrite no
	set omm_server "127.0.0.1"
	set omm_port 3000
	set omm_api 1
	set jonb_index ""
	set job_index "[current_job]"
	set description "Plugin to request current job for Open Monkey Mind"
	set block_size 8
	set block_select yes
	set _run ""
	set _prepare ""

define inline_script reset_correct
	set description "Executes Python code"
	set _run "var.correct=0 #reset variable from first touch"
	set _prepare ""

define sketchpad reward_screen
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[participant_name]" x=0 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Level: [level]" x=320 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="	Target Position: [Position_Target]" x=-8 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=Task4 x=-288 y=-352 z_index=0

define sketchpad reward_screen_1
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[participant_name]" x=0 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Level: [level]" x=320 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="	Target Position: [Position_Target]" x=-8 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=Task4 x=-288 y=-352 z_index=0

define OMMConditioner rewardfortouch
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 500
	set motor_n_pulses 1
	set fallback_conditioner Dummy
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define OMMConditioner rewardfortouch_1
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 500
	set motor_n_pulses 1
	set fallback_conditioner Dummy
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define sketchpad start_button
	set duration 0
	set description start_button
	draw rect color="#ffffff" fill=1 h=384 penwidth=1 show_if=always w=512 x=-256 y=-192 z_index=0

define loop test_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Coo1 "CooA.wav"
	setcycle 0 Coo2 "CooB.wav"
	run new_sequence

define sketchpad timeout_1
	set duration 2000
	set description "Displays stimuli"
	draw rect color="#00ff00" fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define sketchpad timeout_1_1
	set duration 2000
	set description "Displays stimuli"
	draw rect color="#00ff00" fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run activate_HPs always
	run start_button always
	run Playing_Sound1 always
	run Playing_Sound2 always
	run logger always
	run reaching_criteria_loop "[aborted_trial]=0"
	run redo_aborted_trial "[aborted_trial]=1"

define inline_script wrong_response
	set description "Executes Python code"
	___run__
	print('')
	print('>>>>>>>>>>>>>>>>>>>>>>')
	print ('>>> WRONG RESPONSE !!!')
	print('>>>>>>>>>>>>>>>>>>>>>>')
	print('')
	var.response_to_first = 1 
	__end__
	set _prepare ""

define inline_script wrong_response_1
	set description "Executes Python code"
	___run__
	print('')
	print('>>>>>>>>>>>>>>>>>>>>>>')
	print ('>>> WRONG RESPONSE !!!')
	print('>>>>>>>>>>>>>>>>>>>>>>')
	print('')
	
	 
	__end__
	set _prepare ""

