---
API: 2.1
Description: A template experiment for OpenMonkeyMind
OpenSesame: 3.3.9
Platform: nt
Title: OMM Template Experiment
---
set width 1024
set uniform_coordinates yes
set title "OMM Template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\pbeli\\AppData\\Roaming\\Python\\share\\opensesame_extensions\\OpenMonkeyMind"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background gray

define sequence empty_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run test_loop never
	run request_job always
	run trial_sequence always

define sketchpad grayscreen
	set duration keypress
	set description "Displays stimuli"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define OMMDetectParticipant new_OMMDetectParticipant
	set serial_port COM5
	set participant_variable participant
	set detector rfid

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "nvoc005.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define OMMRequestJob request_job
	set test_loop test_loop
	set omm_server "127.0.0.1"
	set omm_port 3000
	set omm_api 1
	set description "Plugin to request current job for Open Monkey Mind"
	set block_size 10
	set block_select no
	set _run ""
	set _prepare ""

define OMMConditioner reward
	set sound "do nothing"
	set serial_port COM6
	set reward yes
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define loop test_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition A
	setcycle 1 condition B
	run empty_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run grayscreen always
	run new_OMMDetectParticipant always
	run new_sampler always
	run logger always
	run reward always

