---
API: 2.1
Citation: 'Theeuwes, J. (1992). Perceptual selectivity for color and form. *Perception
  & Psychophysics*, *51*(6), 599–606. <http://doi.org/10.3758/BF03211656>

  '
Description: An attentional capture experiment, loosely based on Theeuwes (1992)
OpenSesame: 3.3.9
Platform: nt
Title: Attentional capture
---
set width 1024
set uniform_coordinates yes
set title "OMM 2 alternative forced choice task"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:\\Dropbox\\Work\\CCDP\\OpenMonkeyMind\\osexp\\Training tasks"
set disable_garbage_collection yes
set description "A basic match-to-sample task"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sketchpad AFC_display
	set duration 0
	set description "Displays two stimuli to choose from"
	draw image center=1 file="[stim_left].bmp" name=image_left scale=0.5 show_if=always x=-320 y=192 z_index=0
	draw image center=1 file="[stim_right].bmp" name=image_right scale=0.5 show_if=always x=320 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[participant_name]" x=-384 y=-352 z_index=0

define loop AFC_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Exécuter un autre item plusieurs fois"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run AFC_sequence

define mouse_response AFC_mouse_response
	set timeout "[AFC_max_display_time]"
	set show_cursor yes
	set linked_sketchpad AFC_display
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Récolte des clics de souris"

define inline_script AFC_prepare_display
	set description "Executes Python code"
	___run__
	# random position, 0 on the left, 1 on the right
	import random
	random_pos = random.randint(0,1)
	
	if random_pos==0:
	    var.stim_left=var.target
	    var.stim_right=var.distractor
	elif random_pos ==1:
	    var.stim_left=var.distractor
	    var.stim_right=var.target
	__end__
	set _prepare ""

define repeat_cycle AFC_repeat
	set description "Optionally repeat a cycle from a loop"
	__condition__
	[cursor_roi]!="image_left" and [cursor_roi]!="image_right" and [AFC_max_display_time]>0
	__end__

define inline_script AFC_response_time
	set description "Executes Python code"
	___run__
	# response time
	var.AFC_total_response_time = var.response_time + var.AFC_total_response_time  
	
	#print('match tot resp time? {}'.format(var.AFC_total_response_time))
	
	# maximal display duration time
	var.AFC_max_display_time = var.AFC_max_display_time -var.response_time
	#print('matching_max_display_time? {}'.format(var.AFC_max_display_time))
	__end__
	set _prepare ""

define sequence AFC_sequence
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"
	run AFC_display always
	run AFC_mouse_response always
	run AFC_response_time always
	run AFC_repeat always
	run evaluate_response always

define sketchpad ITI
	set duration 3000
	set description "Montrer des stimuli visuels"

define OMMConditioner OMMConditioner
	set sound "do nothing"
	set serial_port COM4
	set reward yes
	set motor_pause 200
	set motor_n_pulses 1
	set description "Conditioner plugin for Open Monkey Mind"
	set conditioner SeedDispenser

define sketchpad Time_out
	set duration 3000
	set description "Montrer des stimuli visuels"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=Incorrect x=-224 y=-128 z_index=0
	draw rect color="#00b000" fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define sketchpad blank
	set duration 0
	set description "Displays stimuli"

define inline_script description
	set description "Executes Python code"
	set _run ""
	___prepare__
	"""
	This is the second training stage: a two alternative forced choice task
	
	Monkeys are presented with two images one of which is the target (rewarded) and the other the distractor (not rewarded). Trial starts with fixation cross.
	
	There are 6 stages with 6 different pairs of images, criteria is 80% correct on block of 50 trials.
	
	Outstanding issues:
	 
	Settings:
	- set block size in global variables
	- 
	
	"""
	__end__

define inline_script evaluate_response
	set description "Exécute du code Python"
	___run__
	# Correct response?
	if var.cursor_roi == "image_left" and random_pos == 0:
	    var.correct_AFC = 1
	if var.cursor_roi == "image_right" and random_pos == 1:
	    var.correct_AFC = 1
	
	# Trial aborted?
	if var.AFC_total_response_time>=var.aborted_delay:
	    var.aborted_trial=1
	
	# print('cursor_roi? {}'.format(var.cursor_roi))
	# print('correct_response? {}'.format(var.correct_AFC))
	# print('aborted trial? {}'.format(var.aborted_trial))
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run description always
	run global_variables always
	run get_session_data always
	run test_loop never
	run request_job always
	run trial_sequence always

define inline_script experimental_variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Fixed parameters
	var.success_criteria=0.8 # success thresold
	
	# Response time variables
	var.AFC_max_display_time=var.aborted_delay
	var.AFC_total_response_time=0
	
	# Response variables
	var.correct_AFC = 0
	
	# Aborted trial
	var.aborted_trial = 0 # 1 if trial is aborted, else 0
	__end__

define inline_script get_session_data
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	# Check if the omm object exists, and if so whether it is connected to a server.
	if 'omm' in globals() and omm.connected:
	    # retrieve session data from server
	    session_data = omm.generic_session_data  
	    #print('session_data', session_data)
	    
	    # If there is no session data yet, this means that we are starting a new session. Therefore, we generate a randomly ordered list of all job indices, and an empty list of all jobs that are already done.
	    if session_data is None:
	        var.training_level = 1
	        jobs_todo = list(range(1, block_size + 1))
	        random.shuffle(jobs_todo)
	        jobs_done = []
	    
	    # Otherwise unpack the session data, which is a tuple consisting of a number for the training stage, a list of job indices that are still to be done, and a list of (job_index, correct) tuples that indicate which jobs have already been done, and whether the associated response was correct.
	    else:
	        var.training_level,jobs_todo,jobs_done = session_data
	        
	    var.current_job = jobs_todo[0]
	    #print('participant: {} ({})'.format(omm.current_participant_name, omm.current_participant))
	    var.participant_name=omm.current_participant_name
	    # print('crurrent training level:', var.training_level)
	    # print('current job:', var.current_job)
	    # print('jobs todo:', jobs_todo)
	    # print('jobs done:', jobs_done)
	else:
	    print('Not connected to OMM server')
	__end__

define inline_script global_variables
	set description "Exécute du code Python"
	set _run ""
	___prepare__
	# Block size
	block_size = 50
	#block_size = 2 # for testing
	
	# Delay to answer
	var.aborted_delay = 5000 
	
	# Default participant name and level
	var.participant_name="testing"
	var.training_level=1
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sequence new_sequence
	set flush_keyboard yes
	set description "Exécute séquentiellement plusieurs items"

define inline_script reaching_criteria_loop
	set description "Executes Python code"
	___run__
	from openmonkeymind import Job
	import statistics
	
	if 'omm' in globals() and omm.connected:
	    
	    # Print properties of current Job
	    # print('job id: {}'.format(var.omm_job_id))
	    # print('current job index: {}'.format(var.omm_job_index))
	    # print('correct = {}'.format(var.correct_AFC))
	    
	    # Remember that the current job is now done, and whether the response was correct
	    jobs_done.append((var.current_job,var.correct_AFC))
	    jobs_todo=jobs_todo[1:]
	    
	    # If we've done all practice trials, check if the accuracy was high enough
	    if len(jobs_done) == block_size:
	        acc = statistics.mean(job_correct for job_index, job_correct in jobs_done)
	        # print('accuracy: {}'.format(acc))
	        
	        # If the accuracy was too low, we re-add all done jobs to the todo list and clear the list of done jobs. We also reset all the Job states to pending, otherwise the announce will crash with 'No jobs available'.
	        
	        # If criteria is not reached
	        if acc < var.success_criteria:
	            
	            # set jobs from block back to pending
	            # omm.set_job_states(1+(var.omm_block_index-1)*block_size,1+var.omm_block_index*block_size, Job.PENDING)
	            omm.set_job_states(1, omm.job_count + 1, Job.PENDING) # just setting all jobs back to pending...
	            jobs_todo += [job_index for job_index, job_correct in jobs_done]
	            jobs_done = []
	        elif var.training_level<3:
	            var.training_level=var.training_level+1
	            # print('crurrent training stage:',training_stage)
	            jobs_todo=list(range(1+(var.training_level-1)*block_size ,1+var.training_level*block_size))
	            # print('jobs todo:', jobs_todo)
	            random.shuffle(jobs_todo)
	            jobs_done = []
	        else:
	            # Sets all jobs to Finished to finish experiment
	            print('training stage 2 over!!!!')
	            omm.set_job_states(1,omm.job_count+1,Job.FINISHED)
	            
	    # update the generic session data on the server
	    omm.generic_session_data = var.training_level,jobs_todo,jobs_done  
	__end__
	set _prepare ""

define inline_script redo_aborted_trial
	set description "Executes Python code"
	___run__
	# if trial aborted reset to pending to do it again
	from openmonkeymind import Job
	
	if 'omm' in globals() and omm.connected:
	    
	    # Print properties of current Job
	    # print('job id: {}'.format(var.omm_job_id))
	    # print('current job index: {}'.format(var.omm_job_index))
	    # print('Aborted? {}'.format(var.aborted_trial))
	    # print('crurrent training stage:', training_stage)
	    # print('current job:', var.current_job)
	    # print('jobs todo:', jobs_todo)
	    # print('jobs done:', jobs_done)
	    
	    # Set all jobs back to Pending without changing job list
	    omm.set_job_states(1, omm.job_count + 1, Job.PENDING)
	  
	__end__
	set _prepare ""

define OMMRequestJob request_job
	set test_loop test_loop
	set omm_server "127.0.0.1"
	set omm_port 3000
	set omm_api 1
	set jonb_index ""
	set job_index "[current_job]"
	set description "Plugin to request current job for Open Monkey Mind"
	set block_size 10
	set block_select yes
	set _run ""
	set _prepare ""

define loop test_loop
	set source table
	set repeat 10000
	set order random
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target red
	setcycle 0 distractor white
	setcycle 1 target train1
	setcycle 1 distractor train2
	setcycle 2 target train3
	setcycle 2 distractor train4
	setcycle 3 target train5
	setcycle 3 distractor train6
	setcycle 4 target train7
	setcycle 4 distractor train8
	setcycle 5 target train9
	setcycle 5 distractor train10
	run new_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experimental_variables always
	run AFC_prepare_display always
	run AFC_loop always
	run blank always
	run logger always
	run OMMConditioner "[correct_AFC]=1"
	run Time_out "[correct_AFC]=0 and [aborted_trial]=0"
	run ITI "[aborted_trial]=0"
	run redo_aborted_trial "[aborted_trial]=1"
	run reaching_criteria_loop "[aborted_trial]=0"

